//  FILE : NN_SAN_model_1984.xml
//
// CREATED : 24th January 2002
//
// LAST MODIFIED : 12th August 2003
//
// AUTHOR : Catherine Lloyd
//          Department of Engineering Science
//          The University of Auckland
//
// MODEL STATUS : This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION : This file contains a CellML description of the 1984 Noble and Noble mathematical model of sino-atrial node electrical activity.
//
// CHANGES:
//   25/02/2002 - CML - Corrected Cai differential equation.
//   06/05/2002 - CML - Added some initial values.
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   05/06/2003 - CML - Fixed the MathML in one component.
//   12/08/2003 - CML - Corrected equations.
// publisher: The University of Auckland, Bioengineering Institute
// modification: W3CDTF 2002-02-25; Corrected the Cai differential equations.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2003-06-05; Corrected equations: alpha_y and beta_y in hyperpolarising_activated_current_y_gate, and beta_d in the secondary_inward_current_d_gate component. Removed i_NaCa calculation1 by commenting it out, and corrected i_NaCa calculation2 in Na_Ca_exchanger component.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-05-06; Added some initial values from Penny Noble's documentation.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2003-06-05; Fixed maths: beta_h_calculation in fast_sodium_current_h_gate.; Given Catherine; Family Lloyd; Other May
// created: W3CDTF 2002-01-24
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: The Noble-Noble Model of Sino-atrial Node Electrical Activity, 1984
// bio_entity: Sinoatrial Node Cell
// comment: FN Catherine Lloyd; This is the CellML description of Noble and Noble's mathematical model of sino-atrial node electrical activity based on a modification of the Difrancesco-Noble cardiac cell model. The modifications are based on experimental work and they reproduce action potential and pacemaker activity in the node. Most of the equations remain unchanged but parameters have been altered to make them appropriate to the sino-atrial node.
// reference: Pubmed_id 6149553; Given Denis; Family Noble; Given S; Family Noble; Other J; title A Model of Sino-Atrial Node Electrical Activity Based on a Modification of the DiFrancesco-Noble (1984) Equations; volume 222; first_page 295; title Proceedings of the Royal Society of London. Series B, Biological Sciences; W3CDTF 1984-09-22; last_page 304
// reference: subject_type keyword; Sinoatrial Node; cardiac; electrophysiology
// species: Mammalia
def model noble_noble_1984_version01 as
  // Noble-Noble Model Of Sino-Atrial Node Electrical Activity, 1984
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // In 1984 D. Noble and S.J. Noble published a mathematical model which describes electrical activity in the sino-atrial node (see below). Their model is based on the Purkinje fibre model developed by D. DiFrancesco and D. Noble (see The DiFrancesco-Noble Purkinje Fibre Model, 1985 (${HTML_EXMPL_DFN_MODEL})). Most of the equations of this cardiac cell model remain unchanged. However, based on the results of experimental work, where necessary, certain parameters have been modified in order to make the model appropriate to a sino-atrial node.
  //
  // The complete original paper reference is cited below:
  //
  // A Model of Sino-Atrial Node Electrical Activity Based on a Modification of the DiFrancesco-Noble (1984) Equations, D. Noble and S.J. Noble, Proceedings of the Royal Society of London. Series B, Biological Sciences (http://www.pubs.royalsoc.ac.uk/proc_bio/proc_bio.html), 222, 295-304. (The full text (http://links.jstor.org/sici?sici=0080-4649%2819840922%29222%3A1228%3C295%3AAMOSNE%3E2.0.CO%3B2-P) of the article is available to members on the JSTOR website.) PubMed ID: 6149553 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=6149553&dopt=Abstract)
  //
  // The raw CellML description of the Noble-Noble sino-atrial node model can be downloaded in various formats as described in . For an example of a more complete documentation for an electrophysiological model, see The Hodgkin-Huxley Squid Axon Model, 1952 (${HTML_EXMPL_HHSA_INTRO}).
  //
  // cell diagram of the NN SAN model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the NN SAN model.
  //
  // the cellml rendering of the NN SAN model
  //
  // The network defined in the CellML description of the Noble-Noble SAN model. For simplicity, not all the variables are shown.
  // Below, are defined some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_cm2 as
    unit ampere {pref: nano};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit concentration_units as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb {expo: -1};
    unit mole;
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: millisecond {pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.
  // It defines the action potential variable "V" among other things.

  def comp membrane as
    // These variables are defined here and used in other components.
    var V: millivolt {pub: out, init: -60.0};
    var R: joule_per_kilomole_kelvin {pub: out, init: 8.314};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_mole {pub: out, init: 96845.0};
    // This variable is defined here and only used internally.
    var C: microF_per_cm2 {init: 1.0};
    var i_pulse: microA_per_cm2 {init: 0.0};
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var i_f: microA_per_cm2 {pub: in};
    var i_K: microA_per_cm2 {pub: in};
    var i_K1: microA_per_cm2 {pub: in};
    var i_Na_b: microA_per_cm2 {pub: in};
    var i_Ca_b: microA_per_cm2 {pub: in};
    var i_p: microA_per_cm2 {pub: in};
    var i_NaCa: microA_per_cm2 {pub: in};
    var i_Na: microA_per_cm2 {pub: in};
    var i_si: microA_per_cm2 {pub: in};
    // The membrane voltage (V) is calculated as an ordinary
    // differential equation in terms of the currents.
    ode(V, time) = (i_f-(i_K+i_K1+i_Na_b+i_Ca_b+i_p+i_NaCa+i_Na+i_si+i_pulse))/C;
  enddef;
  // The hyperpolarising-activated current (i_f) is a Na-K current.

  // comment: In this case, the equations of the DiFrancesco-Noble model with the kinetics speeded up by a factor of two produced a realistic simulation of the hyperpolarising-activated current in the sino-atrial node.
  def comp hyperpolarising_activated_current as
    // These variables are defined here and used in other components.
    var i_f: microA_per_cm2 {pub: out};
    var i_fNa: microA_per_cm2 {pub: out};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var i_fK: microA_per_cm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_f_Na: microS {init: 6.0};
    var g_f_K: microS {init: 6.0};
    var I_f: microA_per_cm2;
    var Km_f: concentration_units {init: 45.0};
    // These variables are imported from other components.
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Kc: concentration_units {pub: in};
    var Ki: concentration_units {pub: in};
    var Nai: concentration_units {pub: in};
    var Nao: concentration_units {pub: in};
    // These variables are imported from encapsulated components.
    var y: dimensionless {priv: in};
    i_f = y*I_f;
    i_fNa = i_f-i_fK;
    i_fK = i_f-i_fNa;
    I_f = Kc/(Kc+Km_f)*(g_f_K*(V-E_K))+g_f_Na*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Kc/Ki);
  enddef;
  // The y gate is encapsulated within the hyperpolarising-activated current.

  def comp hyperpolarising_activated_current_y_gate as
    // This variable is defined here and used in other components.
    var y: dimensionless {pub: out, init: 0.007};
    // These variables are defined here and only used internally.
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    // These variables are imported from parent and sibling components.
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y = 0.1{per_millisecond}*exp(-0.067{dimensionless}*(V+52.0{millivolt}));
    beta_y = 2.0{per_millisecond}*(V+52.0{millivolt})/(1.0{dimensionless}-exp(-0.2{dimensionless}*(V+52.0{millivolt})));
    ode(y, time) = alpha_y*(1.0{dimensionless}-y)-beta_y*y;
  enddef;
  // The time-dependent (delayed) potassium current is equivalent to the plateau
  // potassium current (1) in the MNT model.  It is controlled by a single gate,
  // x.

  // comment: The delayed K+ current is activated in a similar voltage range in Purkinje fibres and in sino-atrial nodes but the kinetics are significantly faster in the sino-atrial node. The DiFrancesco-Noble equation for the time-dependent potassium current is replaced in this model with equations based on the sino-atrial node results.
  def comp time_dependent_potassium_current as
    // This variable is defined here and used in other components.
    var i_K: microA_per_cm2 {pub: out};
    // These variables are defined here and only used internally.
    var K: dimensionless;
    var I_K: microA_per_cm2;
    var i_K_max: nanoA {init: 20.0};
    // These variables are imported from other components.
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ki: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    // This variable is imported from an encapsulated component.
    var x: dimensionless {priv: in};
    i_K = x*I_K;
    I_K = i_K_max*((Ki-Kc*exp(V/25.0{millivolt}))/140.0{dimensionless});
  enddef;
  // The x gate encapsulated within the time-dependent potassium current.

  def comp time_dependent_potassium_current_x_gate as
    // This variable is defined here and used in other components.
    var x: dimensionless {pub: out, init: 0.54};
    // These variables are defined here and only used internally.
    var alpha_x: per_millisecond;
    var beta_x: per_millisecond;
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    alpha_x = 0.5{microA_per_cm2}*(V+22.0{millivolt})/(1.0{dimensionless}-exp(-(V+22.0{millivolt})/5.0{millivolt}));
    beta_x = 0.178{microA_per_cm2}*(V+22.0{millivolt})/exp((V+22.0{millivolt})/15.0{millivolt}-1.0{dimensionless});
    ode(x, time) = alpha_x*(1.0{dimensionless}-x)-beta_x*x;
  enddef;
  // The time-independent (background) potassium current (i_K1).

  // comment: For the background K+ current, the Noble-Noble model used the same equation as the DiFrancesco-Noble model but with the maximum value for g_K1 greatly reduced from 920 to 10 microS.
  def comp time_independent_potassium_current as
    // This variable is defined here and used in other components.
    var i_K1: microA_per_cm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_K1: microS {init: 0.75};
    var Km_K1: concentration_units {init: 10.0};
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Kc: concentration_units {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    i_K1 = g_K1*(Kc/(Kc+Km_K1))*((V-E_K)/(1.0{dimensionless}+exp((V+10.0{millivolt}-E_K)*F*2.0{dimensionless}/(R*T))));
  enddef;

  def comp sodium_background_current as
    // This variable is defined here and used in other components.
    var i_Na_b: microA_per_cm2 {pub: out};
    // This variable is defined here and only used internally.
    var g_Nab: microS {init: 0.07};
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;
  // The calcium background current is in the same form as the sodium background
  // current.

  def comp calcium_background_current as
    // These variables are defined here and used in other components.
    var i_Ca_b: microA_per_cm2 {pub: out};
    var E_Ca: millivolt {pub: out};
    // This variable is defined here and only used internally.
    var g_Cab: microS {init: 0.01};
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: concentration_units {pub: in};
    var Cao: concentration_units {pub: in};
    i_Ca_b = g_Cab*(V-E_Ca);
    E_Ca = R*T/F*ln(Cao/Cai);
  enddef;
  // The Na-K exchange pump couples the free energy released by the hydrolysis of
  // ATP to transfer sodium and potassium ions across the cell membrane against
  // their electrochemical gradients.  3 Na ions are pumped out for every 2 K
  // ions pumped into the cell.

  def comp sodium_potassium_pump as
    // This variable is defined here and used in other components.
    var i_p: microA_per_cm2 {pub: out};
    // This variable is defined here and only used internally.
    var I_p: nanoA {init: 50.0};
    var K_mK: concentration_units {init: 1.0};
    var K_mNa: concentration_units {init: 40.0};
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var Nai: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    i_p = I_p*(Kc/(K_mK+Kc))*(Nai/(K_mNa+Nai));
  enddef;
  // The equation for the Na-Ca exchange current assumes that i_NaCa depends
  // soley on the sodium and calcium ion electrochemical gradients and the
  // transmembrane potential.  The stoichiometry of the exchange is 3Na : 1Ca,
  // producing a net outward current.

  // comment: Like the DiFrancesco-Noble model, two alternative equations for the i_NaCa current are given by the Noble-Noble model. The simplest makes the current a sine function of the total energy gradient. The more realistic model uses an equation which is likely to reproduce better dependence of i_NaCa on intracellular calcium ions.
  def comp Na_Ca_exchanger as
    // This variable is defined here and used in other components.
    var i_NaCa: microA_per_cm2 {pub: out};
    var n_NaCa: dimensionless {pub: out, init: 3.0};
    // These variables are defined here and only used internally.
    var K_NaCa: dimensionless {init: 0.002};
    var E_NaCa: millivolt;
    var d_NaCa: dimensionless {init: 0.0001};
    var gamma: dimensionless {init: 0.5};
    var n: dimensionless;
    // These variables are imported in from other components.
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: concentration_units {pub: in};
    var Cai: concentration_units {pub: in};
    var E_Na: millivolt {pub: in};
    var Nai: concentration_units {pub: in};
    var Nao: concentration_units {pub: in};
    var E_Ca: millivolt {pub: in};
    // The current is given as:
    // <apply id="Na_Ca_exchanger_calculation1"><eq />
    //        <ci> i_NaCa </ci>
    //        <apply><times />
    //          <ci> K_NaCa </ci>
    //          <apply><sinh />
    //            <apply><divide />
    //              <apply><times />
    //                <apply><minus />
    //                  <ci> V </ci>
    //                  <ci> E_NaCa </ci>
    //                </apply>
    //                <ci> F </ci>
    //              </apply>
    //              <apply><times />
    //                <ci> R </ci>
    //                <ci> T </ci>
    //              </apply>
    //            </apply>
    //          </apply>
    //        </apply>
    //      </apply>
    i_NaCa = K_NaCa*((exp(2.0{dimensionless}*gamma*(n_NaCa-2.0{dimensionless})*V*F/(2.0{dimensionless}*R*T))*pow(Nai, n)*Cao-exp(-2.0{dimensionless}*(1.0{dimensionless}-gamma)*(n_NaCa-2.0{dimensionless})*V*F/(2.0{dimensionless}*R*T))*pow(Nao, n)*Cai)/(1.0{dimensionless}+d_NaCa*(Cai*pow(Nao, n)+Cao*pow(Nai, n))))/(1.0{dimensionless}+Cai/0.0069{concentration_units});
    E_NaCa = (n_NaCa*E_Na-2.0{dimensionless}*E_Ca)/(n_NaCa-2.0{dimensionless});
  enddef;
  // The DFN model retains a two-variable mode; of the sodium kinetics, with new
  // equations for the gates m and h.  It is acknowledged however that the model
  // does not represent the slower components of Na inactivation and recovery.
  // It is also assumed that the sodium channel shows a 12% permeability to k
  // ions.

  // comment: The fast sodium current is present in the sino-atrial node, but it is much smaller than the current found in Purkinje fibres. To adjust for this difference in magnitude, g_Na has been reduced from 750 to 1.25 microS.
  def comp fast_sodium_current as
    // This variable is defined here and used in other components.
    var i_Na: microA_per_cm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_Na: microS {init: 1.25};
    var E_mh: millivolt {init: 40.0};
    // These variables are imported from other components.
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: concentration_units {pub: in};
    var Nai: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    var Ki: concentration_units {pub: in};
    // These variables are imported from encapsulated components.
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    // The following equation calculates the sodium current in terms
    // of the conductance, the membrane voltage, and the gate variables.
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*(V-E_mh);
    E_mh = R*T/F*ln((Nao+0.12{dimensionless}*Kc)/(Nai+0.12{dimensionless}*Ki));
  enddef;
  // The "fast_sodium_current_m_gate" is the activation m gate encapsulated
  // inside the "fast sodium current" component.

  def comp fast_sodium_current_m_gate as
    // This variable is defined here and used in other components.
    var m: dimensionless {pub: out, init: 0.076};
    // These variables are defined here and only used internally.
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    //
    // These variables are imported from the "environment" and the "membrane" via
    // the "fast_sodium_current" component.
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 200.0{per_millivolt_millisecond}*(V+41.0{millivolt})/(1.0{dimensionless}-exp(-0.1{dimensionless}*(V+41.0{millivolt})));
    beta_m = 8000.0{per_millisecond}*exp(-0.056{dimensionless}*(V+66.0{millivolt}));
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;
  // The "fast_sodium_current_h_gate" component is the inactivation h gate
  // encapsulated in the "fast sodium current" component.

  def comp fast_sodium_current_h_gate as
    // This variable is defined here and used in other components.
    var h: dimensionless {pub: out, init: 0.015};
    // These variables are defined here and only used internally.
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    //
    // These variables are imported from the "environment" and the "membrane" via
    // the "fast_sodium_current" component.
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = 20.0{per_millisecond}*exp(-0.125{dimensionless}*(V+75.0{millivolt}));
    beta_h = 2000.0{per_millisecond}/(1.0{dimensionless}+320.0{dimensionless}*exp(-0.1{dimensionless}*(V+75.0{millivolt})));
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;
  // Like the MNT model, the kinetics of the secondary inward current are still
  // described in terms of two gate variables d and f, but the time constants for
  // activation and inactivation processes are much shorter.  The fast component,
  // i_si of this current has been divided into the individual ion movements of
  // Ca, K and Na.

  def comp secondary_inward_current as
    // These variables are defined here and used in other components.
    var i_si: microA_per_cm2 {pub: out};
    var i_siCa: microA_per_cm2 {pub: out};
    var i_siK: microA_per_cm2 {pub: out};
    var i_siNa: microA_per_cm2 {pub: out};
    // This variable is defined here and only used internally.
    var P_si: dimensionless {init: 7.5};
    // These variables are imported from other components.
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: concentration_units {pub: in};
    var Nai: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    var Ki: concentration_units {pub: in};
    var Cao: concentration_units {pub: in};
    var Cai: concentration_units {pub: in, priv: out};
    // These variables are imported from encapsulated components.
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    i_si = d*f*f2*(i_siCa+i_siK+i_siNa);
    i_siCa = 4.0{dimensionless}*P_si*(V-50.0{millivolt})*(F/(R*T))/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-50.0{millivolt})*F*2.0{dimensionless}/(R*T)))*(Cai*exp(100.0{dimensionless}*F/(R*T))-Cao*exp(-2.0{dimensionless}*(V-50.0{millivolt})*F/(R*T)));
    i_siK = 0.01{dimensionless}*P_si*(V-50.0{millivolt})*(F/(R*T))/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-50.0{millivolt})*F/(R*T)))*(Ki*exp(50.0{dimensionless}*F/(R*T))-Kc*exp(-1.0{dimensionless}*(V-50.0{millivolt})*F/(R*T)));
    i_siNa = 0.01{dimensionless}*P_si*(V-50.0{millivolt})*(F/(R*T))/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-50.0{millivolt})*F/(R*T)))*(Nai*exp(50.0{dimensionless}*F/(R*T))-Nao*exp(-1.0{dimensionless}*(V-50.0{millivolt})*F/(R*T)));
  enddef;
  // The "secondary_inward_current_d_gate" component is the d gate encapsulated
  // in the "secondary inward current" component.

  def comp secondary_inward_current_d_gate as
    // This variable is defined here and used in other components.
    var d: dimensionless {pub: out, init: 0.0011};
    // These variables are defined here and only used internally.
    var alpha_d: per_millisecond;
    var beta_d: per_millisecond;
    //
    // These variables are imported from the "environment" and the "membrane" via
    // the "secondary_inward_current" component.
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    // The rate constants on the d gate are functions of membrane voltage.
    alpha_d = 30.0{per_millivolt_millisecond}*((V+24.0{millivolt})/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V+24.0{millivolt})/4.0{millivolt})));
    beta_d = -12.0{per_millivolt_millisecond}*(V+24.0{millivolt})/(1.0{dimensionless}-exp(0.1{dimensionless}*(V+24.0{millivolt})));
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;
  // The "secondary_inward_current_f_gate" component is the f gate encapsulated
  // in the "secondary inward current" component.

  def comp secondary_inward_current_f_gate as
    // This variable is defined here and used in other components.
    var f: dimensionless {pub: out, init: 0.785};
    // These variables are defined here and only used internally.
    var alpha_f: per_millisecond;
    var beta_f: per_millisecond;
    // These variables are imported from parent and sibling components.
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Cai: concentration_units {pub: in};
    // The rate constants on the f gate are functions of membrane voltage.
    alpha_f = -6.25{per_millivolt_millisecond}*(V+34.0{millivolt})/(1.0{dimensionless}-exp(0.25{dimensionless}*(V+34.0{millivolt})));
    beta_f = 50.0{per_millisecond}/(1.0{dimensionless}+exp(-1.0{dimensionless}*(V+34.0{millivolt})/4.0{millivolt}));
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;
  // The DFN model also includes a description of Ca-dependent inactivation.
  // When calcium ions bind to a regulatory site on the channel protein, they
  // induce a conformational change such that the channel no longer conducts,
  // and the secondary current slows or ceases.

  def comp secondary_inward_current_f2_gate as
    // This variable is defined here and used in other components.
    var f2: dimensionless {pub: out, init: 0.785};
    // These variables are defined here and only used internally.
    var alpha_f2: per_millisecond;
    var beta_f2: per_millisecond;
    var K_mf2: concentration_units {init: 0.0005};
    // These variables are imported from parent and sibling components.
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Cai: concentration_units {pub: in};
    ode(f2, time) = alpha_f2-f2*(alpha_f2+beta_f2);
    alpha_f2 = 5.0{dimensionless};
    beta_f2 = Cai*alpha_f2/K_mf2;
  enddef;
  // Additionally, the DFN model attempted to quantify the changes in several ion
  // concentrations, as well as the [Ca]i of earlier models.

  def comp extracellular_sodium_concentration as
    // This variable is defined here and used in other components
    var Nao: concentration_units {pub: out, init: 140.0};
  enddef;

  def comp intracellular_sodium_concentration as
    // This variable is defined here and used in other components
    var Nai: concentration_units {pub: out, init: 7.5};
    // This variable is defined here and only used internally.
    var Vi: microlitre;
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: microA_per_cm2 {pub: in};
    var i_Na_b: microA_per_cm2 {pub: in};
    var i_siNa: microA_per_cm2 {pub: in};
    var i_p: microA_per_cm2 {pub: in};
    var i_fNa: microA_per_cm2 {pub: in};
    var i_NaCa: microA_per_cm2 {pub: in};
    var n_NaCa: dimensionless {pub: in};
    ode(Nai, time) = -(i_Na+i_Na_b+i_fNa+i_siNa+i_p*3.0{dimensionless}+i_NaCa*(n_NaCa/(n_NaCa-2.0{dimensionless})))/(Vi*F);
  enddef;

  def comp extracellular_calcium_concentration as
    // This variable is defined here and used in other components
    var Cao: concentration_units {pub: out, init: 2.0};
  enddef;
  // Changes in [Ca]i were first modelled in the BR model and has only been
  // slightly developed in the DFN model.  Calcium is sequestered in the
  // sarcoplasmic reticulum ([Ca]up).  A fraction is transferred to a release
  // store in the junctional SR ([Ca]rel) before being released into the
  // intracellular space.  The Ca concentrations in each of these various
  // stores is modelled together with the transfer between the calcium sites
  // and the ca transfer across the cell membrane via the other ionic
  // currents.

  // comment: The equations for calcium uptake and release are the same as the DiFrancesco-Noble model. However, it was found that in sino-atrial nodes, relaxation starts before the end of repolarisation. The intracellular Cai transient much reach its peak early in the action potential and decline to small values during repolarisation. To achieve this result, some parameters of the DiFrancesco-Noble model were significantly reduced, including the uptake time constant (tau_up) and the repriming time constant (tau_rep).
  def comp intracellular_calcium_concentration as
    // This variable is defined here and used in other components
    var Cai: concentration_units {pub: out, init: 0.000058};
    // These variables are defined here and only used internally.
    var V_up: microlitre;
    var V_rel: microlitre;
    var Vi: microlitre;
    var i_up: microA_per_cm2;
    var i_tr: microA_per_cm2;
    var i_rel: microA_per_cm2;
    var alpha_up: per_millisecond;
    var beta_up: per_millisecond;
    var alpha_tr: per_millisecond;
    var beta_tr: per_millisecond;
    var alpha_rel: per_millisecond;
    var beta_rel: per_millisecond;
    var Ca_up: concentration_units {init: 1.98};
    var Ca_rel: concentration_units {init: 0.55};
    var Ca_up_max: concentration_units {init: 5.0};
    var K_mCa: concentration_units {init: 2.0};
    var p: dimensionless {init: 0.785};
    var alpha_p: per_millisecond;
    var beta_p: per_millisecond;
    var tau_up: millisecond {init: 0.005};
    var tau_rep: millisecond {init: 0.2};
    var tau_rel: millisecond {init: 0.01};
    var rCa: dimensionless {init: 2.0};
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Ca_b: microA_per_cm2 {pub: in};
    var i_siCa: microA_per_cm2 {pub: in};
    var i_NaCa: microA_per_cm2 {pub: in};
    var n_NaCa: dimensionless {pub: in};
    i_up = alpha_up*Cai*(Ca_up_max-Ca_up);
    alpha_up = 2.0{dimensionless}*Vi*F/(tau_up*Ca_up_max);
    i_tr = alpha_tr*p*(Ca_up-Ca_rel);
    alpha_tr = 2.0{dimensionless}*V_rel*F/tau_rep;
    alpha_p = -0.625{per_millivolt_millisecond}*(V+34.0{millivolt})/(1.0{dimensionless}-exp(0.25{dimensionless}*(V+34.0{millivolt})));
    beta_p = 5.0{per_millisecond}/(1.0{dimensionless}+exp(-1.0{dimensionless}*(V+34.0{millivolt})/4.0{millivolt}));
    i_rel = alpha_rel*Ca_rel*(pow(Cai, rCa)/(pow(Cai, rCa)+K_mCa));
    alpha_rel = 2.0{dimensionless}*V_rel*F/tau_rel;
    ode(p, time) = alpha_p*(1.0{dimensionless}-p)-beta_p*p;
    ode(Ca_up, time) = (i_up-i_tr)/(2.0{dimensionless}*V_up*F);
    V_up = Vi*0.05{dimensionless};
    ode(Ca_rel, time) = (i_tr-i_rel)/(2.0{dimensionless}*V_rel*F);
    V_rel = Vi*0.02{dimensionless};
    ode(Cai, time) = -(i_siCa+i_Ca_b+i_up-(i_rel+2.0{dimensionless}*i_NaCa/(n_NaCa-2.0{dimensionless})))/(2.0{dimensionless}*Vi*F);
  enddef;
  // The DFN model assumes that the potassium ion concentration is homogeneous
  // throughout the three-compartment model.

  def comp extracellular_potassium_concentration as
    // This variable is defined here and used in other components
    var Kc: concentration_units {pub: out, init: 3.0};
    // These variables are defined here and only used internally.
    var V_e: microlitre;
    var Kb: concentration_units {init: 3.0};
    var i_mK: microA_per_cm2;
    var P: per_millisecond {init: 200.0};
    var i_K_b: microA_per_cm2;
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_K1: microA_per_cm2 {pub: in};
    var i_K: microA_per_cm2 {pub: in};
    var i_fK: microA_per_cm2 {pub: in};
    var i_siK: microA_per_cm2 {pub: in};
    var i_p: microA_per_cm2 {pub: in};
    ode(Kc, time) = -(P*(Kc-Kb))+i_mK/(V_e*F);
    i_mK = i_K1+i_K+i_fK+i_siK+i_K_b-2.0{dimensionless}*i_p;
  enddef;
  // The intracellular potassium concentration is related to the total potassium
  // ion membrane flux.

  def comp intracellular_potassium_concentration as
    // This variable is defined here and used in other components
    var Ki: concentration_units {pub: out, init: 140.0};
    // These variables are defined here and only used internally.
    var Vi: microlitre;
    var i_mK: microA_per_cm2;
    // These variables are imported from other components.
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(Ki, time) = -i_mK/(Vi*F);
  enddef;
  // The following <group> element specifies a single containment hierarchy
  // that encompasses all of the components in the model, with the exception of
  // the "environment" component.

  def group as containment for
    comp membrane incl
      comp hyperpolarising_activated_current incl
        comp hyperpolarising_activated_current_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_x_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp Na_Ca_exchanger;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp secondary_inward_current incl
        comp secondary_inward_current_d_gate;
        comp secondary_inward_current_f_gate;
        comp secondary_inward_current_f2_gate;
      endcomp;
      comp intracellular_sodium_concentration;
      comp extracellular_sodium_concentration;
      comp intracellular_calcium_concentration;
      comp extracellular_calcium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
    endcomp;
  enddef;
  // The following <group> element specifies how the components representing
  // activation and inactivation gates are encapsulated inside their parent
  // currents.

  def group as encapsulation for
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_x_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp secondary_inward_current incl
      comp secondary_inward_current_d_gate;
      comp secondary_inward_current_f_gate;
      comp secondary_inward_current_f2_gate;
    endcomp;
  enddef;
  // "time" is passed from the "environment" component into the
  // "membrane" and current components.
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between secondary_inward_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between extracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between hyperpolarising_activated_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_f and i_f;
  enddef;
  def map between time_dependent_potassium_current and membrane for
    vars V and V;
    vars i_K and i_K;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_background_current and membrane for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars V and V;
    vars i_p and i_p;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between fast_sodium_current and membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between secondary_inward_current and membrane for
    vars V and V;
    vars i_si and i_si;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between intracellular_sodium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_calcium_concentration and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between extracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  // A few variables are passed between the other components.
  def map between hyperpolarising_activated_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_fK and i_fK;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between hyperpolarising_activated_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and Na_Ca_exchanger for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_sodium_concentration for
    vars i_fNa and i_fNa;
    vars Nai and Nai;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between calcium_background_current and Na_Ca_exchanger for
    vars E_Ca and E_Ca;
  enddef;
  def map between calcium_background_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K and i_K;
  enddef;
  def map between time_dependent_potassium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_Ca_b and i_Ca_b;
    vars Cai and Cai;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars i_p and i_p;
    vars Kc and Kc;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_p and i_p;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between Na_Ca_exchanger and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between Na_Ca_exchanger and intracellular_sodium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and intracellular_calcium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between secondary_inward_current and intracellular_calcium_concentration for
    vars i_siCa and i_siCa;
    vars Cai and Cai;
  enddef;
  def map between secondary_inward_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between secondary_inward_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between secondary_inward_current and extracellular_potassium_concentration for
    vars i_siK and i_siK;
    vars Kc and Kc;
  enddef;
  def map between secondary_inward_current and intracellular_sodium_concentration for
    vars i_siNa and i_siNa;
    vars Nai and Nai;
  enddef;
  def map between secondary_inward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  // Several variables are passed between parent components and their
  // encapsulated gates.
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
enddef;
